PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = -1.0000, -1.0000, -1.0000
  expName = exp
  keyboardBackend = ioHub
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Routines
  Routine checkApparatus
    TextComponent instrApparatus
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"Check fNIRS trigger \n\n\n\n\n Please wait for the experimenter"
      units = norm
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    KeyboardComponent keyRespGo
      allowedKeys = 'g'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine taskIntro
    TextComponent instrTaskIntro
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"In this study, you will be watching the British television crime drama series Sherlock. \nPlease watch it as you would normally watch a television show that you are interested in. \n\n\n\n\n\nPress ENTER to continue"
      units = norm
      wrapWidth = 100
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    KeyboardComponent keyRespReturn
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine ready
    TextComponent instrReady
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"Are you ready for the movie? \n\n\n\n\n\nPress ENTER to start watching"
      units = norm
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    KeyboardComponent keyRespReturn_2
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine countdown
    TextComponent textCountdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(10-int(t))
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  Routine movie1
    MovieComponent sherlock1
      backend = ffpyplayer
      forceEndRoutine = True
      movie = media/sherlock/sherlock_part1.m4v
      size = [1.6, 0.9]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent keyRespGoDebug
      allowedKeys = 'g'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine movie2
    MovieComponent sherlock2
      backend = ffpyplayer
      forceEndRoutine = True
      movie = media/sherlock/sherlock_part2.m4v
      size = [1.6, 0.9]
      startVal [time (s)] = 0.0
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    KeyboardComponent keyRespGoDebug2
      allowedKeys = 'g'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine finish
    TextComponent instrFinish
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"Thank you for your participation! \n\n\n\n\n Please wait for the experimenter"
      units = norm
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    KeyboardComponent keyRespGo_2
      allowedKeys = 'g'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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Flow
  Routine checkApparatus
  Routine taskIntro
  Routine ready
  Routine countdown
  Routine movie1
  Routine movie2
  Routine finish
